<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

  <!--
        Gadgetron generic recon chain for 2D and 3D cartesian sampling

        Triggered by repetition
        Recon N is contrast and S is set

        Author: Hui Xue
        Magnetic Resonance Technology Program, National Heart, Lung and Blood Institute, National Institutes of Health
        10 Center Drive, Bethesda, MD 20814, USA
        Email: hui.xue@nih.gov
    -->

  <!-- reader -->
  <reader>
    <slot>1008</slot>
    <dll>gadgetron_mricore</dll>
    <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
  </reader>

  <!-- writer -->
  <writer>
    <slot>1022</slot>
    <dll>gadgetron_mricore</dll>
    <classname>MRIImageWriter</classname>
  </writer>

  <!-- Noise prewhitening -->
  <gadget>
    <name>NoiseAdjust</name>
    <dll>gadgetron_mricore</dll>
    <classname>NoiseAdjustGadget</classname>
  </gadget>

  <!-- RO asymmetric echo handling -->
  <gadget>
    <name>AsymmetricEcho</name>
    <dll>gadgetron_mricore</dll>
    <classname>AsymmetricEchoAdjustROGadget</classname>
  </gadget>

  <!-- RO oversampling removal -->
  <gadget>
    <name>RemoveROOversampling</name>
    <dll>gadgetron_mricore</dll>
    <classname>RemoveROOversamplingGadget</classname>
  </gadget>

  <!-- Data accumulation and trigger gadget -->
  <gadget>
    <name>AccTrig</name>
    <dll>gadgetron_mricore</dll>
    <classname>AcquisitionAccumulateTriggerGadget</classname>
    <property>
      <name>trigger_dimension</name>
      <value></value>
    </property>
    <property>
      <name>sorting_dimension</name>
      <value></value>
    </property>
  </gadget>

  <gadget>
    <name>BucketToBuffer</name>
    <dll>gadgetron_mricore</dll>
    <classname>BucketToBufferGadget</classname>
    <property>
      <name>N_dimension</name>
      <value>contrast</value>
    </property>
    <property>
      <name>S_dimension</name>
      <value>average</value>
    </property>
    <property>
      <name>split_slices</name>
      <value>false</value>
    </property>
    <property>
      <name>ignore_segment</name>
      <value>true</value>
    </property>
    <property>
      <name>verbose</name>
      <value>true</value>
    </property>
  </gadget>

  <!-- Prep ref -->
  <gadget>
    <name>PrepRef</name>
    <dll>gadgetron_mricore</dll>
    <classname>GenericReconCartesianReferencePrepGadget</classname>

    <!-- parameters for debug and timing -->
    <property>
      <name>debug_folder</name>
      <value></value>
    </property>
    <property>
      <name>perform_timing</name>
      <value>true</value>
    </property>
    <property>
      <name>verbose</name>
      <value>true</value>
    </property>

    <!-- averaging across repetition -->
    <property>
      <name>average_all_ref_N</name>
      <value>true</value>
    </property>
    <!-- every set has its own kernels -->
    <property>
      <name>average_all_ref_S</name>
      <value>true</value>
    </property>
    <!-- whether always to prepare ref if no acceleration is used -->
    <property>
      <name>prepare_ref_always</name>
      <value>true</value>
    </property>
  </gadget>

  <!-- Recon -->
  <gadget>
    <name>Recon</name>
    <dll>gadgetron_mricore</dll>
    <classname>GenericReconCartesianGrappaGadget</classname>

    <!-- parameters for debug and timing -->
    <property>
      <name>debug_folder</name>
      <value></value>
    </property>
    <property>
      <name>perform_timing</name>
      <value>true</value>
    </property>
    <property>
      <name>verbose</name>
      <value>true</value>
    </property>

    <!-- whether to send out gfactor -->
    <property>
      <name>send_out_gfactor</name>
      <value>true</value>
    </property>
  </gadget>

  <!-- FOV Adjustment -->
  <gadget>
    <name>FOVAdjustment</name>
    <dll>gadgetron_mricore</dll>
    <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

    <!-- parameters for debug and timing -->
    <property>
      <name>debug_folder</name>
      <value></value>
    </property>
    <property>
      <name>perform_timing</name>
      <value>false</value>
    </property>
    <property>
      <name>verbose</name>
      <value>false</value>
    </property>
  </gadget>

  <!-- Image Array Scaling -->
  <gadget>
    <name>Scaling</name>
    <dll>gadgetron_mricore</dll>
    <classname>GenericReconImageArrayScalingGadget</classname>

    <!-- parameters for debug and timing -->
    <property>
      <name>perform_timing</name>
      <value>false</value>
    </property>
    <property>
      <name>verbose</name>
      <value>false</value>
    </property>

    <property>
      <name>min_intensity_value</name>
      <value>64</value>
    </property>
    <property>
      <name>max_intensity_value</name>
      <value>4095</value>
    </property>
    <property>
      <name>scalingFactor</name>
      <value>10.0</value>
    </property>
    <property>
      <name>use_constant_scalingFactor</name>
      <value>true</value>
    </property>
    <property>
      <name>auto_scaling_only_once</name>
      <value>true</value>
    </property>
    <property>
      <name>scalingFactor_dedicated</name>
      <value>100.0</value>
    </property>
  </gadget>

  <!-- ImageArray to images -->
  <gadget>
    <name>ImageArraySplit</name>
    <dll>gadgetron_mricore</dll>
    <classname>ImageArraySplitGadget</classname>
  </gadget>

  <!-- after recon processing -->
  <gadget>
    <name>ComplexToFloatAttrib</name>
    <dll>gadgetron_mricore</dll>
    <classname>ComplexToFloatGadget</classname>
  </gadget>

  <gadget>
    <name>FloatToShortAttrib</name>
    <dll>gadgetron_mricore</dll>
    <classname>FloatToUShortGadget</classname>

    <property>
      <name>max_intensity</name>
      <value>32767</value>
    </property>
    <property>
      <name>min_intensity</name>
      <value>0</value>
    </property>
    <property>
      <name>intensity_offset</name>
      <value>0</value>
    </property>
  </gadget>

  <gadget>
    <name>ImageFinish</name>
    <dll>gadgetron_mricore</dll>
    <classname>ImageFinishGadget</classname>
  </gadget>

</gadgetronStreamConfiguration>
